CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "D.TIF")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "F.TIF")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "R.TIF")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop the DAPI image down to a 200 x 200 rectangle by entering specific coordinates.']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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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notes:['Use the same cropping from the DAPI image for FITC image.']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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
Crop:[module_num:7|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notes:['Use the same cropping from the DAPI image for the rhodamine image.']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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:10|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:11|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select object sets to measure:Cells, Nuclei, Cytoplasm
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Select images to measure:CropBlue
    Select objects to measure:Nuclei, Cells, Cytoplasm

MeasureTexture:[module_num:13|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notes:['Measure texture features of the nuclei, cells and cytoplasm from the cropped DAPI image.']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
    Select images to measure:CropBlue
    Select objects to measure:Cells, Nuclei, Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

GrayToColor:[module_num:14|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notes:['Combine the cropped grayscale channels into a color RGB image.']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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:CropRed
    Select the image to be colored green:CropGreen
    Select the image to be colored blue:CropBlue
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:15|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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
    Select the type of image to save:Image
    Select the image to save:RGBImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CroppedFlyImage
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:16|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:No

ExportToDatabase:[module_num:17|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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